PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/apple/Documents/study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase '},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'orange '},
      {'study_word': 'mansha '},
      {'study_word': 'ipad'},
      {'study_word': 'laptop '},
      {'study_word': 'bag'},
      {'study_word': 'bottle'},
      {'study_word': 'pencil '},
      {'study_word': 'nike '},
      {'study_word': 'shoes '},
      {'study_word': 'bag '},
      {'study_word': 'printout '},
      {'study_word': 'google '}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = /Users/apple/Documents/test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_h_o_n'},
      {'test': '_ia_o'},
      {'test': '_ea_o_'},
      {'test': 'c_m_r_'},
      {'test': '_p_a_d_'},
      {'test': '_o_s_'},
      {'test': 'o_a_n_e'},
      {'test': 'l_pt_p'},
      {'test': 'i_p_d'},
      {'test': '_i_e'},
      {'test': 'b_g'},
      {'test': 'm_ns_a'},
      {'test': '_oo_l_'},
      {'test': '_rint_u_'},
      {'test': 's_o_s'},
      {'test': 'b_o__le'},
      {'test': 'p_e_ci_'},
      {'test': 'o_an_e'}]
    Routine test
  LoopTerminator trials_2
