PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = psychopy_tutorial_test
  keyboardBackend = ioHub
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Routines
  Routine start
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    PolygonComponent star
      fillColor = yellow
      lineColor = yellow
      shape = star
      size = (0.2, 0.2)
      startVal [time (s)] = 0.3
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    PolygonComponent right_rectangle
      fillColor = white
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
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    PolygonComponent left_rectangle
      fillColor = white
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.3
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    ImageComponent right_image
      image [set every repeat] = $r_image
      pos = (0.5, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.3
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    ImageComponent left_image
      image [set every repeat] = $l_image
      pos = (-0.5, 0)
      size = (0.6,0.6)
      startVal [time (s)] = 0.3
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    MouseComponent mouse
      clickable = star
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.3
      timeRelativeTo = routine
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  Routine trial
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    PolygonComponent left_rectangle_trial
      fillColor = white
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent right_rectangle_trial
      fillColor = white
      pos = (0.5, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent left_image_trial
      image [set every repeat] = $l_image
      pos = (-0.5, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    ImageComponent right_image_trial
      image [set every repeat] = $r_image
      pos = (0.5, 0)
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    MouseComponent trial_mouse
      clickable = left_image_trial,right_image_trial,left_rectangle_trial,right_rectangle_trial
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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    SoundComponent trial_sound
      sound [set every repeat] = $target_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = psychopy_tutorial_trials.csv
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('l_image', 'stimuli/dog.png'), ('r_image', 'stimuli/cat.png'), ('target_sound', 'stimuli/dog.wav'), ('correct', 'stimuli/dog.png')]),
      OrderedDict([('l_image', 'stimuli/cat.png'), ('r_image', 'stimuli/dog.png'), ('target_sound', 'stimuli/dog.wav'), ('correct', 'stimuli/dog.png')]),
      OrderedDict([('l_image', 'stimuli/dog.png'), ('r_image', 'stimuli/cat.png'), ('target_sound', 'stimuli/cat.wav'), ('correct', 'stimuli/cat.png')]),
      OrderedDict([('l_image', 'stimuli/cat.png'), ('r_image', 'stimuli/dog.png'), ('target_sound', 'stimuli/cat.wav'), ('correct', 'stimuli/cat.png')])]
    Routine start
    Routine trial
  LoopTerminator trials
